PsychoPy2experiment version="2024.1.5"
Settings
  Audio lib = ptb
  Experiment info = {'participant': 'f"{randint(0, 999999):06.0f}"', 'session': '001'}
  Full-screen window = True
  Monitor = testMonitor
  Screen = 1
  Show mouse = True
  Units = height
  Window size (pixels) = [1280, 720]
  expName = Session7_WordPriming
  keyboardBackend = ioHub
  logging level = warning
  runMode = 1
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Routines
  Routine trial
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    TextComponent text
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 8.0
      text [set every repeat] = $study_word
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    SliderComponent slider
      forceEndRoutine = True
      granularity = 0
      labels = "familar", "unfamiliar"
      letterHeight = 0.05
      pos = (0, -0.3)
      size = (1.0, 0.1)
      startVal [time (s)] = 0.0
      styles = rating
      ticks = (1, 2, 3, 4, 5)
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  Routine test
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    TextComponent text_2
      letterHeight = 0.05
      pos = (0, 0.3)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 10.0
      text [set every repeat] = $test_word
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    TextboxComponent textbox
      bold = False
      editable = True
      letterHeight = 0.05
      size = (0.5, 0.5)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 10.0
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    TextComponent text_3
      letterHeight = 0.05
      pos = (0, -0.3)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 10.0
      text = click to submit
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    MouseComponent mouse
      clickable = text_3
      forceEndRoutineOnPress = valid click
      saveMouseState = on click
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 10.0
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Flow
  LoopInitiator trials loopType="TrialHandler"
    conditionsFile = study_words.xlsx
    loopType = random
    nReps = 1
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    conditions:
      [{'study_word': 'book'},
      {'study_word': 'cushion'},
      {'study_word': 'phone'},
      {'study_word': 'marble'},
      {'study_word': 'board'},
      {'study_word': 'laptop'},
      {'study_word': 'chart'},
      {'study_word': 'T-shirt'},
      {'study_word': 'mouse'},
      {'study_word': 'pastry'},
      {'study_word': 'case'},
      {'study_word': 'cruise'},
      {'study_word': 'police'},
      {'study_word': 'keys'},
      {'study_word': 'poster'}]
    Routine trial
  LoopTerminator trials
  LoopInitiator trials_2 loopType="TrialHandler"
    conditionsFile = test_words.xlsx
    loopType = random
    nReps = 1
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    conditions:
      [{'test_word': 'l_pt_p', 'Reference': 'Laptop', 'old_new': 'old '},
      {'test_word': '_ha_t', 'Reference': 'Chart', 'old_new': 'old '},
      {'test_word': 'T_hi_t', 'Reference': 'Tshirt', 'old_new': 'old '},
      {'test_word': '_ou_se', 'Reference': 'Mouse', 'old_new': 'old '},
      {'test_word': 'P_as_tr_', 'Reference': 'Pastry', 'old_new': 'old '},
      {'test_word': 'c_s_', 'Reference': 'Case', 'old_new': 'old '},
      {'test_word': '_ru_s_', 'Reference': 'Cruise', 'old_new': 'old '},
      {'test_word': 'P_li_e', 'Reference': 'Police', 'old_new': 'old '},
      {'test_word': 'K_y_', 'Reference': 'Keys', 'old_new': 'old '},
      {'test_word': 'P_st_r', 'Reference': 'Poster', 'old_new': 'old '},
      {'test_word': '_o_rd', 'Reference': 'Board', 'old_new': 'old '},
      {'test_word': '_a_bl_', 'Reference': 'Marble', 'old_new': 'old '},
      {'test_word': '_ho_e', 'Reference': 'Phone', 'old_new': 'old '},
      {'test_word': '_oo_', 'Reference': 'Book', 'old_new': 'old '},
      {'test_word': 'c_s_io_', 'Reference': 'Cushion', 'old_new': 'old '},
      {'test_word': 'Ta_l_', 'Reference': 'Table', 'old_new': 'new'},
      {'test_word': 'p_nc_l', 'Reference': 'Pencil', 'old_new': 'new'},
      {'test_word': 'V_s_', 'Reference': 'Vase', 'old_new': 'new'},
      {'test_word': 'Bo_t_le', 'Reference': 'Bottle', 'old_new': 'new'},
      {'test_word': 'C_m_ra', 'Reference': 'Camera', 'old_new': 'new'}]
    Routine test
  LoopTerminator trials_2
