PsychoPy2experiment version="2024.1.5"
Settings
  Audio lib = ptb
  Experiment info = {'participant': 'f"{randint(0, 999999):06.0f}"', 'session': '001'}
  Full-screen window = True
  Monitor = testMonitor
  Screen = 1
  Show mouse = True
  Units = height
  Window size (pixels) = [1280, 720]
  expName = WordPrimacy
  keyboardBackend = ioHub
  logging level = warning
  runMode = 1
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Routines
  Routine trial
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    TextComponent WordDisplay
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 2.0
      text [set every repeat] = $Words
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    TextComponent text
      letterHeight = 0.05
      startVal [time (s)] = 2.0
      stopVal [duration (s)] = 1.5
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  Routine Recall
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    TextComponent text_2
      letterHeight = 0.05
      pos = (0, 0.2)
      startVal [time (s)] = 0.0
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      text:
        Recall and write down as many words as you can from the experiment.

        Click to submit after each word.

        You have 3 minutes to complete this task.
    TextboxComponent textbox
      bold = False
      editable = True
      letterHeight = 0.05
      size = (0.5, 0.5)
      startVal [time (s)] = 0.0
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    TextComponent text_3
      letterHeight = 0.05
      pos = (0, -0.3)
      startVal [time (s)] = 0.0
      text = Click to submit
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    MouseComponent mouse
      clickable = text_3
      forceEndRoutineOnPress = valid click
      saveMouseState = on click
      startVal [time (s)] = 0.0
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Flow
  LoopInitiator trials loopType="TrialHandler"
    conditionsFile = WordList.xlsx
    loopType = sequential
    nReps = 1
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    conditions:
      [{'Words': 'Apple'},
      {'Words': 'Chair'},
      {'Words': 'Guitar'},
      {'Words': 'River'},
      {'Words': 'Ballon'},
      {'Words': 'Jacket'},
      {'Words': 'Candle'},
      {'Words': 'Mountain'},
      {'Words': 'Flower'},
      {'Words': 'Sofa'},
      {'Words': 'Dog'},
      {'Words': 'Anger'},
      {'Words': 'Gardern'},
      {'Words': 'Sea'},
      {'Words': 'Project'}]
    Routine trial
  LoopTerminator trials
  LoopInitiator trials_2 loopType="TrialHandler"
    loopType = random
    nReps = 15
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    Routine Recall
  LoopTerminator trials_2
