PsychoPy2experiment version="2024.1.5"
Settings
  Audio lib = ptb
  Experiment info = {'participant': 'f"{randint(0, 999999):06.0f}"', 'session': '001'}
  Full-screen window = True
  Monitor = testMonitor
  Screen = 1
  Show mouse = True
  Units = height
  Window size (pixels) = [1280, 720]
  expName = WordPrimacy_n-back
  keyboardBackend = ioHub
  logging level = warning
  runMode = 1
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Routines
  Routine Instruction
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    TextComponent text_3
      letterHeight = 0.05
      startVal [time (s)] = 0.0
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      text:
        You will need to perform two tasks:

        First, a
         series of words will be displayed briefly.
        Your task is to memorize these words as they appear and recall them at the end of the task.


        Press the Spacebar to proceed to the next instruction.
    KeyboardComponent key_resp
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine Instruction2
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    TextComponent text_5
      letterHeight = 0.05
      startVal [time (s)] = 0.0
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      text:
        Second,  you will see a series of shapes displayed between two words. Your task is to compare the current shape with the shape shown two trials earlier (two steps back):
        If the current shape matches the shape from two trials ago, press Y.
        If it does not match, press N.

        Example- Sequence: Circle, Triangle, Circle

        Responses: First trial - N, Second trial - N, Third trial - Y (because the third shape matches the first).

        Press the Spacebar to start the experiment.
    KeyboardComponent key_resp_2
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine wordpresentation
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    TextComponent WordDisplay
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 2.0
      text [set every repeat] = $word_list
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    TextComponent text_2
      letterHeight = 0.05
      startVal [time (s)] = 2.0
      stopVal [duration (s)] = 1.5
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  Routine ShapeNback
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    PolygonComponent shapeStim
      fillColor = white
      shape = circle
      size = (0.1, 0.1)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 0.5
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    CodeComponent code
      Code Type = Auto->JS
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      Begin Routine:
        # Set the shape based on the current trial's value
        if shape == 'circle':
            shapeStim.vertices = 'circle'
        elif shape == 'square':
            shapeStim.vertices = 'square'
        elif shape == 'triangle':
            shapeStim.vertices = [[0, 0.5], [-0.5, -0.5], [0.5, -0.5]]  # Triangle vertices
    TextComponent text_6
      letterHeight = 0.05
      startVal [time (s)] = 0.5
      stopVal [duration (s)] = 1.5
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    KeyboardComponent NbackResponse
      allowedKeys = 'y','n'
      correctAns = $corr_ans
      forceEndRoutine = True
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 2.0
      storeCorrect = True
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  Routine RecallPhase
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    TextComponent text
      letterHeight = 0.05
      pos = (0, 0.2)
      startVal [time (s)] = 0.0
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      text:
        Recall and write down as many words as you can from the experiment.

        Click to submit after each word.

        You have 3 minutes to complete this task.
    TextboxComponent textbox
      bold = False
      editable = True
      letterHeight = 0.05
      size = (0.5, 0.5)
      startVal [time (s)] = 0.0
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    TextComponent text_4
      letterHeight = 0.05
      pos = (0, -0.3)
      startVal [time (s)] = 0.0
      text = Click to submit
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    MouseComponent mouse
      clickable = text_4
      forceEndRoutineOnPress = valid click
      saveMouseState = on click
      startVal [time (s)] = 0.0
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Flow
  Routine Instruction
  Routine Instruction2
  LoopInitiator trials_3 loopType="TrialHandler"
    conditionsFile = combined.xlsx
    loopType = sequential
    nReps = 1
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    conditions:
      [{'word_list': 'bottle', 'shape': 'circle', 'corr_ans': 'n'},
      {'word_list': 'chair', 'shape': 'square', 'corr_ans': 'n'},
      {'word_list': 'book', 'shape': 'square', 'corr_ans': 'n'},
      {'word_list': 'lamp', 'shape': 'triangle', 'corr_ans': 'n'},
      {'word_list': 'clock', 'shape': 'square', 'corr_ans': 'y'},
      {'word_list': 'pen', 'shape': 'circle', 'corr_ans': 'n'},
      {'word_list': 'phone', 'shape': 'square', 'corr_ans': 'y'},
      {'word_list': 'pencil', 'shape': 'triangle', 'corr_ans': 'n'},
      {'word_list': 'laptop', 'shape': 'circle', 'corr_ans': 'n'},
      {'word_list': 'bag', 'shape': 'triangle', 'corr_ans': 'y'},
      {'word_list': 'cover', 'shape': 'circle', 'corr_ans': 'y'},
      {'word_list': 'plant', 'shape': 'square', 'corr_ans': 'n'},
      {'word_list': 'key', 'shape': 'square', 'corr_ans': 'n'},
      {'word_list': 'window', 'shape': 'square', 'corr_ans': 'y'},
      {'word_list': 'notebook', 'shape': 'triangle', 'corr_ans': 'n'}]
    Routine wordpresentation
    Routine ShapeNback
  LoopTerminator trials_3
  LoopInitiator trials loopType="TrialHandler"
    loopType = random
    nReps = 15
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    Routine RecallPhase
  LoopTerminator trials
